//Set your output folder

output = "/PATH/TO/YOUR/FOLDER/" // Remember to put the last /

//Fill with your file extension (Type ".extension")

extension = ".czi";

//Set names of your channels with the same order that appears in open images

name_ch1 = "DAPI";
name_ch2 = "WT1";
name_ch3 = "ACE2";
name_ch4 = "LTL";

//Set colours of your channels (Entry values should be as "Grays", "Red", "Green", "Blue", "Cyan", "Magenta", "Yellow")

Color_ch1 = "Blue";
Color_ch2= "Green";
Color_ch3= "Red";
Color_ch4= "Grays";

//Set Projection (Types: "Max Intensity", "Average Intensity", "Min Intensity", "Sum Slices", "Median", "Standard Deviation")

Projection = "No";

Pro_type_ch1 = "Max Intensity";
Pro_type_ch2 = "Max Intensity";
Pro_type_ch3 = "Max Intensity";
Pro_type_ch4 = "Max Intensity";

//Set start and end of Z projection

start = "1"
end = "21"

//Set calibration
Need_cal = "Yes";

units = "um";
px_width = 1.32;
px_height = 1.32;
vx_depth = 1.0;

//Set scale bar

scale_bar = "200"

//From now on the script will run w/o changes
//Only if it is requigrays, command lines related with adjustment 
//of brightness/contrast and filtering could be added

title = getTitle();titlewoext = replace(title, extension, "");

//Calibrate if needed.
if (Need_cal == "Yes") {

	Stack.setXUnit(units);
	run("Properties...", "pixel_width="+px_width+" pixel_height="+px_height+" voxel_depth="+vx_depth+"");
}

run("Split Channels");

FIJI_ch1_ID = "C1-" + title; 
FIJI_ch2_ID = "C2-" + title; 
FIJI_ch3_ID = "C3-" + title; 
FIJI_ch4_ID = "C4-" + title; 

//Project

if (Projection == "Yes") {

selectWindow(FIJI_ch1_ID);run("Z Project...", "start="+start+" stop="+end+" projection=["+Pro_type_ch1+"]");close(FIJI_ch1_ID);
selectWindow(FIJI_ch2_ID);run("Z Project...", "start="+start+" stop="+end+" projection=["+Pro_type_ch2+"]");close(FIJI_ch2_ID);
selectWindow(FIJI_ch3_ID);run("Z Project...", "start="+start+" stop="+end+" projection=["+Pro_type_ch3+"]");close(FIJI_ch3_ID);
selectWindow(FIJI_ch4_ID);run("Z Project...", "start="+start+" stop="+end+" projection=["+Pro_type_ch4+"]");close(FIJI_ch4_ID);


function FIJI_ID_after_projection(FIJI_ch_ID,Pro_type_ch) {

	if (Pro_type_ch == "Max Intensity") {
		ID_after_projection = "MAX_" + FIJI_ch_ID;
	} else if (Pro_type_ch == "Sum Slices") {
		ID_after_projection = "SUM_" + FIJI_ch_ID;
	} else if (Pro_type_ch == "Average Intensity") {
		ID_after_projection = "AVG_" + FIJI_ch_ID;
	} else if (Pro_type_ch == "Min Intensity") {
		ID_after_projection = "MIN_" + FIJI_ch_ID;
	} else if (Pro_type_ch == "Median") {
		ID_after_projection = "MED_" + FIJI_ch_ID;
	} else if (Pro_type_ch == "Standard Deviation") {
		ID_after_projection = "STD_" +FIJI_ch_ID;
	} 

	return ID_after_projection;
	}


//Rename after projections

FIJI_ch1_ID = FIJI_ID_after_projection(FIJI_ch1_ID,Pro_type_ch1);
FIJI_ch2_ID = FIJI_ID_after_projection(FIJI_ch2_ID,Pro_type_ch2);
FIJI_ch3_ID = FIJI_ID_after_projection(FIJI_ch3_ID,Pro_type_ch3);
FIJI_ch4_ID = FIJI_ID_after_projection(FIJI_ch4_ID,Pro_type_ch4);

if ((Pro_type_ch1 == Pro_type_ch2) & (Pro_type_ch1 == Pro_type_ch3) & (Pro_type_ch1== Pro_type_ch4)) { 
	run("Select None"); 
	} else {
		selectWindow(FIJI_ch1_ID);run("16-bit");
		selectWindow(FIJI_ch2_ID);run("16-bit");
		selectWindow(FIJI_ch3_ID);run("16-bit");
		selectWindow(FIJI_ch4_ID);run("16-bit");
		}
}

run("Tile");

//Put colors

selectWindow(FIJI_ch1_ID);run(Color_ch1);
selectWindow(FIJI_ch2_ID);run(Color_ch2);
selectWindow(FIJI_ch3_ID);run(Color_ch3);
selectWindow(FIJI_ch4_ID);run(Color_ch4);

//Add commands in case you want to adjust brightness/contrast or filtering
//Next inactive lines include some example of these commands:

selectWindow(FIJI_ch1_ID); //setMinAndMax(150, 2000);//run("Subtract Background...", "rolling=50");setMinAndMax(1000, 30000);
selectWindow(FIJI_ch2_ID); //setMinAndMax(200, 1800);//run("Subtract Background...", "rolling=50");
selectWindow(FIJI_ch3_ID);//run("Median...", "radius=2");setMinAndMax(300, 3300);//setMinAndMax(3000, 41000); //run("Subtract Background...", "rolling=100");run("Median...", "radius=2");
selectWindow(FIJI_ch4_ID);//setMinAndMax(200, 2500);//run("Subtract Background...", "rolling=100");run("Enhance Contrast", "saturated=0.035");

waitForUser("adjust channels separately");

//Create composite channels

run("Merge Channels...", "c1=["+FIJI_ch1_ID+"] c2=["+FIJI_ch2_ID+"] c3=["+FIJI_ch3_ID+"] c4=["+FIJI_ch4_ID+"] keep create");
saveAs("Tiff", ""+output+""+titlewoext+"_Composite.tif");

waitForUser("Adjust brightness/contrast in composite");

selectWindow(""+titlewoext+"_Composite.tif"); run("Split Channels");

//Rename colours from composite

FIJI_ch1_ID = "C1-" +titlewoext+ "_Composite.tif";
FIJI_ch2_ID = "C2-" +titlewoext+ "_Composite.tif";
FIJI_ch3_ID = "C3-" +titlewoext+ "_Composite.tif";
FIJI_ch4_ID = "C4-" +titlewoext+ "_Composite.tif";

//Get min and max values

selectWindow(FIJI_ch1_ID);getMinAndMax(min_ch1, max_ch1);
selectWindow(FIJI_ch2_ID);getMinAndMax(min_ch2, max_ch2);
selectWindow(FIJI_ch3_ID);getMinAndMax(min_ch3, max_ch3);
selectWindow(FIJI_ch4_ID);getMinAndMax(min_ch4, max_ch4);

//Make merge

run("Merge Channels...", "c1=["+FIJI_ch1_ID+"] c2=["+FIJI_ch2_ID+"] c3=["+FIJI_ch3_ID+"] c4=["+FIJI_ch4_ID+"] create keep");
run("RGB Color");saveAs("Tiff", ""+output+""+titlewoext+"_Merge-all.tif");

run("Merge Channels...", "c2=["+FIJI_ch2_ID+"] c3=["+FIJI_ch3_ID+"] c4=["+FIJI_ch4_ID+"] create keep");
run("RGB Color");saveAs("Tiff", ""+output+""+titlewoext+"_MergeWO-"+name_ch1+".tif");

run("Merge Channels...", "c1=["+FIJI_ch1_ID+"] c3=["+FIJI_ch3_ID+"] c4=["+FIJI_ch4_ID+"] create keep");
run("RGB Color");saveAs("Tiff", ""+output+""+titlewoext+"_MergeWO-"+name_ch2+".tif");

run("Merge Channels...", "c1=["+FIJI_ch1_ID+"] c2=["+FIJI_ch2_ID+"] c4=["+FIJI_ch4_ID+"] create keep");
run("RGB Color");saveAs("Tiff", ""+output+""+titlewoext+"_MergeWO-"+name_ch3+".tif");

run("Merge Channels...", "c1=["+FIJI_ch1_ID+"] c2=["+FIJI_ch2_ID+"] c3=["+FIJI_ch3_ID+"] create keep");
run("RGB Color");saveAs("Tiff", ""+output+""+titlewoext+"_MergeWO-"+name_ch4+".tif");

//Save individual channels as RGB

selectWindow(FIJI_ch1_ID);run("RGB Color");
saveAs("Tiff", ""+output+""+titlewoext+"_"+Color_ch1+"-"+name_ch1+".tif");

selectWindow(FIJI_ch2_ID);run("RGB Color");
saveAs("Tiff", ""+output+""+titlewoext+"_"+Color_ch2+"-"+name_ch2+".tif");

selectWindow(FIJI_ch3_ID);run("RGB Color");
saveAs("Tiff", ""+output+""+titlewoext+"_"+Color_ch3+"-"+name_ch3+".tif");

selectWindow(FIJI_ch4_ID);run("RGB Color");
saveAs("Tiff", ""+output+""+titlewoext+"_"+Color_ch4+"-"+name_ch4+".tif");

//Save merge with scales

selectWindow(""+titlewoext+"_Merge-all.tif");height = getHeight();
run("Scale Bar...", "width="+scale_bar+" height="+height*0.02+" font=29 color=White background=None location=[Lower Right] hide");
saveAs("Tiff", ""+output+""+titlewoext+"_Merge-all-wscale.tif");

selectWindow(""+titlewoext+"_MergeWO-"+name_ch1+".tif");height = getHeight();
run("Scale Bar...", "width="+scale_bar+" height="+height*0.02+" font=29 color=White background=None location=[Lower Right] hide");
saveAs("Tiff", ""+output+""+titlewoext+"_MergeWO-"+name_ch1+"-wscale.tif");

selectWindow(""+titlewoext+"_MergeWO-"+name_ch2+".tif");height = getHeight();
run("Scale Bar...", "width="+scale_bar+" height="+height*0.02+" font=29 color=White background=None location=[Lower Right] hide");
saveAs("Tiff", ""+output+""+titlewoext+"_MergeWO-"+name_ch2+"-wscale.tif");

selectWindow(""+titlewoext+"_MergeWO-"+name_ch3+".tif");height = getHeight();
run("Scale Bar...", "width="+scale_bar+" height="+height*0.02+" font=29 color=White background=None location=[Lower Right] hide");
saveAs("Tiff", ""+output+""+titlewoext+"_MergeWO-"+name_ch3+"-wscale.tif");

selectWindow(""+titlewoext+"_MergeWO-"+name_ch4+".tif");height = getHeight();
run("Scale Bar...", "width="+scale_bar+" height="+height*0.02+" font=29 color=White background=None location=[Lower Right] hide");
saveAs("Tiff", ""+output+""+titlewoext+"_MergeWO-"+name_ch4+"-wscale.tif");

//Generate montage.

run("Concatenate...", "  title=[Stack] image1=["+titlewoext+"_"+Color_ch1+"-"+name_ch1+".tif] image2=["+titlewoext+"_"+Color_ch2+"-"+name_ch2+".tif] image3=["+titlewoext+"_"+Color_ch3+"-"+name_ch3+".tif]  image4=["+titlewoext+"_"+Color_ch4+"-"+name_ch4+".tif] image5=["+titlewoext+"_Merge-all-wscale.tif]");
run("Make Montage...", "columns=5 rows=1 first=1 last=5");
selectWindow("Montage");
saveAs("Tiff", ""+output+""+titlewoext+"_Montage.tif");

//Generate Report

print("Original file name: " + title);
print(" ");
print("Color assignation: ");
print("Ch1: " + name_ch1 + " -> " + Color_ch1 + " | Adjusted histogram range: " + min_ch1 + "-" + max_ch1);
print("Ch2: " + name_ch2 + " -> " + Color_ch2 + " | Adjusted histogram range: " + min_ch2 + "-" + max_ch2);
print("Ch3: " + name_ch3 + " -> " + Color_ch3 + " | Adjusted histogram range: " + min_ch3 + "-" + max_ch3);
print("Ch4: " + name_ch4 + " -> " + Color_ch4 + " | Adjusted histogram range: " + min_ch4 + "-" + max_ch4);
print(" ");
if (Projection=="Yes") {
print("Type of projection assigned: ");
print("Ch1: " + name_ch1 + " -> " + Pro_type_ch1);
print("Ch2: " + name_ch2 + " -> " + Pro_type_ch2);
print("Ch3: " + name_ch3 + " -> " + Pro_type_ch3);
print("Ch4: " + name_ch4 + " -> " + Pro_type_ch4);
print("Projected Z range: ("+start+"-"+end+")");} else {
print("Original image was not a Z-stack");};
print(" ");
print("Scale bar: " + scale_bar);

selectWindow("Log");
saveAs("Txt", ""+output+""+titlewoext+"_config.txt");

